run("Grid/Collection stitching", "type=[Grid: row-by-row] order=[Right & Down] grid_size_x=2 grid_size_y=2 tile_overlap=10 first_file_index_i=0 directory=/Users/michielk/oxdata/P01/EM/M3/M3_S1_GNU/tifs file_names=0001_m{iii}.tif output_textfile_name=TileConfiguration.txt fusion_method=[Linear Blending] regression_threshold=0.30 max/avg_displacement_threshold=2.50 absolute_displacement_threshold=3.50 compute_overlap subpixel_accuracy computation_parameters=[Save memory (but be slower)] image_output=[Fuse and display]");
saveAs("Tiff", "/Users/michielk/oxdata/P01/EM/M3/M3_S1_GNU/0001_fused.tif");
